PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1600, 900]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = perspective taking task
  logging level = error
  Save excel file = True
  Units = norm
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    TextComponent statement_label
      wrapWidth = 1.9
      text [set every repeat] = $statement
      pos = [0, 0.25]
      startVal [time (s)] = 0
      letterHeight = 0.07
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    TextComponent perspective_label
      wrapWidth = 1.9
      text [set every repeat] = $perspective
      startVal [time (s)] = 0
      letterHeight = 0.07
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    TextComponent question_label
      wrapWidth = 1.9
      text [set every repeat] = $question
      pos = [0, -0.25]
      startVal [time (s)] = 0
      letterHeight = 0.07
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    KeyboardComponent response
      correctAns = $required_key
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'e', 'i'
      startVal [time (s)] = 0
      store = first key
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    TextComponent left_label
      text [set every repeat] = $response_label_left
      pos = [-0.5,-0.8]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent right_label
      text [set every repeat] = $response_label_right
      pos = [0.5,-0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instruct
    KeyboardComponent inst_resp
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.4
      store = nothing
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    TextComponent text_13
      color = green
      pos = [0, 0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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  Routine intro
    KeyboardComponent intro_resp
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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    TextComponent intro_text
      wrapWidth = 1.9
      startVal [time (s)] = 0
      letterHeight = 0.08
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      text:
        This task will provide you a scenario and question on each screen.

        Pay close attention to changes in perspectives.

        You will want to imagine the scenario and visualise the perspective change.

        Try to answer as accurately as possible.

        Press "e" for the option on the left or "i" for the option on the right.

        Press either one to start.
  Routine thanks
    TextComponent end_text
      text = End of task.
      pos = [0, -0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent end_response
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ITI
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine thanks
